PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = thresholding
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine wait
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    TextComponent intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please press space to release an electric shock.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine shock
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    TextComponent cue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = Delivering.
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    CodeComponent shock
      Code Type = Py
      Before Experiment:
        from ds8r import DS8R
      Begin Routine:
        current_intensity = thisTrial['intensity']
        electrical_shock = DS8R(mode=1, polarity=1, source=1,demand = int(current_intensity * 10),
                                             pulse_width=500, dwell=10, recovery=20, enabled=1)
        electrical_shock.run()
    TextComponent current_intensity
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $intensity
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  Routine rate
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please rate how this shock hurt from 1 (not really) to 10 (too much).

        Please enter digits only and confirm pressing enter.
    CodeComponent rate_code
      Code Type = Py
      Begin Experiment:
        displayText = ''
        oldDisplayText = ''
        skipExp = 1
      Begin Routine:
        cursorCounter = 0
        cursorVariable = '|'
        captured_string = ''
        subject_response_finished = False
        event.clearEvents()
      Each Frame:
        if cursorCounter >= 30:
            if cursorVariable == '|':
                cursorVariable = ' '
            else:
                cursorVariable = '|'
            cursorCounter = 0
        cursorCounter += 1

        if subject_response_finished:
            final_response = captured_string
            continueRoutine = False

        keys = event.getKeys()
        if len(keys):
            if 'escape' in keys:
                core.quit()
            elif 'backspace' in keys:
                captured_string = captured_string[:-1]
            elif 'delete' in keys:
                captured_string = captured_string[:-1]
            elif 'return' in keys and (len(captured_string) < 2 or captured_string == '10'):
                subject_response_finished = True
            elif '0' in keys:
                captured_string = captured_string+'0'
            elif '1' in keys:
                captured_string = captured_string+'1'
            elif '2' in keys:
                captured_string = captured_string+'2'
            elif '3' in keys:
                captured_string = captured_string+'3'
            elif '4' in keys:
                captured_string = captured_string+'4'
            elif '5' in keys:
                captured_string = captured_string+'5'
            elif '6' in keys:
                captured_string = captured_string+'6'
            elif '7' in keys:
                captured_string = captured_string+'7'
            elif '8' in keys:
                captured_string = captured_string+'8'
            elif '9' in keys:
                captured_string = captured_string+'9'
            else:
                pass

        displayText = captured_string+cursorVariable
        if displayText != oldDisplayText:
            rate_text.setText(displayText)
            oldDisplayText=displayText
      End Routine:
        rate = final_response.replace("\n",",")
        thisExp.addData('rate',rate)
    TextComponent rate_text
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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  Routine shock_confirm
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    TextComponent cue_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = Delivering.
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    CodeComponent shock_2
      Code Type = Py
      Before Experiment:
        from ds8r import DS8R
      Begin Routine:
        current_intensity = max_inten - 0.5
        electrical_shock = DS8R(mode=1, polarity=1, source=1,demand = int(current_intensity * 10),
                                             pulse_width=500, dwell=10, recovery=20, enabled=1)
        electrical_shock.run()
    CodeComponent code_2
      Code Type = Py
      disabled = True
      Begin Routine:
        print(max_inten)
  Routine finish_loop
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    CodeComponent break_2
      Code Type = Py
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      Begin Experiment:
        if finish_flag:
  Routine finish_flag
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    CodeComponent initialise_flag
      Code Type = Py
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      Begin Experiment:
        finish_flag = 0
  Routine break_loop
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if captured_string == '10' or captured_string == '9':
            max_inten = thisTrial['intensity']
            trials.finished = True
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'intensity': 1.5},
      {'intensity': 2},
      {'intensity': 2.5},
      {'intensity': 3},
      {'intensity': 3.5},
      {'intensity': 4},
      {'intensity': 4.5},
      {'intensity': 5},
      {'intensity': 5.5},
      {'intensity': 6},
      {'intensity': 6.5},
      {'intensity': 7},
      {'intensity': 7.5},
      {'intensity': 8},
      {'intensity': 8.5},
      {'intensity': 9},
      {'intensity': 9.5},
      {'intensity': 10}]
    Routine wait
    Routine shock
    Routine rate
    Routine break_loop
  LoopTerminator trials
  Routine wait
  Routine shock_confirm
  Routine rate
